PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1024, 768]
  expName = Working
  keyboardBackend = ioHub
  logging level = data
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Routines
  Routine begin
    TextComponent BeginText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome to this experiment. Press 'spacebar' to start.
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    KeyboardComponent StartButton
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent finish
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thank you for participating in this experiment. We will come to you in a moment.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_lure
    ImageComponent image_lure
      image [set every repeat] = $Lure
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_lure
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Indoor ('left') or Outdoor ('right')
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  Routine img_enc
  Routine word
  Routine routine_1
  Routine fixation
  Routine fixation2
  Routine fixation4
  Routine instructions
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        reminder = path_instruc + 'reminder.png'
    KeyboardComponent continue_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = $reminder
      size = [1.4,1]
      startVal [time (s)] = 0.0
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  Routine blocks
  Routine code_init
    CodeComponent code_begin
      Code Type = Py
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      Begin Experiment:
        # before experiment
        import random as rd
        import openpyxl as xl
        import numpy as np

        # paths
        main_path = 'C:\\Users\\alexvb\\Documents\\Memflash\\' #where all the files are located
        stim_excel = main_path+'stimlist.xlsx'  #stimulus excel file
        stim_bullseye = main_path+'bullseye.png'  #bullseye ping
        path_prefix = main_path+'sorted\\' #where images are found
        path_instruc = main_path+'instructions\\' #where instruction PNGs are found
        portaddress = "0x2010" #check under device manager
        send_trigs = 0 #send port triggers? Put on only in lab

        # ~~~~~~~~~~~~~~~~~~~
        # meta-parameters
        t_start = 0.5  # start time of pinging window
        t_end = 1.5  # end time of pinging window
        t_bins = 3  # number of time bins (= number of pinged lists)
        nlists_p = t_bins # number of lists with ping
        nlists_np = 1  # number of lists without ping
        nlists = nlists_p + nlists_np # number of total lists
        # categories (depends on excel file)
        ntop = 96*2  # nstims top base stim set (objects vs scenes)
        nmid = 48*2  # nstims mid base stim set (e.g. inanimate vs animate)
        nbotDims = 4  # number of exemplar categories
        nbotStims = 12  # number of stimuli per category
        nbot = nbotDims*nbotStims  # number of bot base stim set

        # parameters
        nblocks = 8  # number of blocks total
        npairs_block = 10  # number of unique pairs per block
        ntrials_enc = 10  # number of enc trials per block
        ntrials_ret = 40  # number of ret trials per block.
        wm_dur = 0.1 # duration of working memory task (in seconds)
        nret_test = npairs_block # number of trials to test retrieval
        # ~~~~~~~~~~~~~~~~~~~

        # set port
        if send_trigs == 1:
          from psychopy import parallel

        # set seed
        pp_num = expInfo['participant'] #fetch participant
        rd.seed(int(pp_num)) #tailor rd seed to participant
        np.random.seed(int(pp_num)) #tailor np seed to participant

        # check if we are in a training sequence
        if int(pp_num) > 98:
            nblocks = 8  # number of blocks total
            npairs_block = 10  # number of unique pairs per block
            ntrials_enc = 10  # number of enc trials per block
            ntrials_ret = 10  # number of ret trials per block.
            wm_dur = 10 # duration of working memory task (in seconds)
            nret_test = npairs_block # number of trials to test retrieval
            path_prefix = main_path+'training\\' #where images are found
            stim_excel = main_path+'traininglist.xlsx'  #stimulus excel file

        # calculate basic variables for lists to grab from
        # lingo: "list" refers to set of stimuli for one time bin
        t_binedges = np.linspace(t_start, t_end, t_bins+1)
        total_pairs = nblocks*npairs_block
        pairs_perlist = total_pairs/nlists
        if pairs_perlist % round(pairs_perlist) != 0:
            print('Error: nlists and nblocks not divisible!')
        else:
            pairs_perlist = int(pairs_perlist)

        # access stimulus file
        wb = xl.load_workbook(stim_excel, data_only=True)  # read excel
        ws = wb.active

        # initiate variables
        verb_list = []
        # number of exemplar categories across the board
        nbotDimsFull = int(ntop/nbotStims)
        stim_list = np.zeros((nlists, pairs_perlist))
        soa_list = np.zeros((nlists, pairs_perlist))
        stim_struc = np.zeros
        stim_path = []

        # load verbs
        for col in ws['A']:
            verb_list.append(col.value)

        rd.shuffle(verb_list)  # shuffle

        # load stim paths
        for col in ws['B']:
            stim_path.append(col.value)

        # add folder path prefix
        stim_path = [path_prefix + pre for pre in stim_path]

        # build stim matrix to fetch from
        # stim_struc

        # generate set of stimuli per list with equal amount of stim from top categories
        for l in range(0, nlists):
            even_i = 0  # this represents one of the two top categories (e.g. objects)
            odd_i = 0  # this represents the other
            for p in range(0, pairs_perlist):  # for every pair per list
                if (p % 2) == 0:  # if object
                    # fetch from even_i-th 12 exemplars
                    rand_stim = rd.randint(0, 11)+(even_i*12)
                    even_i += 1  # update even_i
                    if rand_stim > ntop/2-1:  # make sure it does not exceed objects
                        # if it does, just randomly grab from objects
                        rand_stim = rd.randint(0, ntop/2-1)
                else:
                    rand_stim = (rd.randint(0, 11)+(odd_i*12))+ntop / \
                        2  # fetch from odd-ith exemplars (scene)
                    odd_i += 1  # update odd_i
                    if rand_stim > ntop-1:  # make sure it does not exceed scenes
                        # if it does, randomly grab
                        rand_stim = rd.randint(ntop/2, ntop-1)
                while rand_stim in stim_list:  # as long as that rand_stim is already in stim_list, try again
                    if (p % 2) == 0:
                        rand_stim = rd.randint(0, 11)+((even_i-1)*12)
                        if rand_stim > ntop/2-1:
                            rand_stim = rd.randint(0, ntop/2-1)
                    else:
                        rand_stim = (rd.randint(0, 11)+((odd_i-1)*12))+ntop/2
                        if rand_stim > ntop-1:
                            rand_stim = rd.randint(ntop/2, ntop-1)
                stim_list[l, p] = rand_stim  # now add to list


        # perform balance of top categories check for each list
        for l in range(0, nlists):
            if np.size(stim_list[l, ][stim_list[l, :] >= ntop/2]) == np.size(stim_list[l, ])/2:
                print('OK: Roughly equal number of top stimuli categories for list', l)
            else:
                raise Exception(
                    "Error: No roughly equal number of top stimuli categories for list")

        # perform uniqueness check
        if np.size(stim_list[:]) == np.size(np.unique(stim_list[:])):
            print('OK: Unique stimulus list!')
        else:
            raise Exception("Error: non-unique stimulus list")

        # create associated ping timings
        for l in range(0, nlists):
            if l < nlists_p:
              soa_list[l, :] = l
            else: soa_list[l, :] = 99 # here we reach non-ping lists; no ping = 99

        # vectorize arrays
        stim_list2 = np.ndarray.flatten(stim_list)
        soa_list2 = np.ndarray.flatten(soa_list)

        # unison shuffle to prevent order effects
        perm2 = np.random.permutation(len(stim_list2))
        stim_list2 = stim_list2[perm2]
        soa_list2 = soa_list2[perm2]

        # now use this to build a stimulus matrix for the actual experiment
        stim_list3 = np.reshape(stim_list2, (nblocks, npairs_block))
        soa_list3 = np.reshape(soa_list2, (nblocks, npairs_block))

        # force integer on everything
        stim_list2 = stim_list2.astype(int)
        stim_list3 = stim_list3.astype(int)
        soa_list2 = soa_list2.astype(int)
        soa_list3 = soa_list3.astype(int)

        # convert from time bin identity to random soa in bin
        soa_list4 = np.zeros(np.size(soa_list2))
        ind = 0
        for i in soa_list2:
            if i != 99: #only create a serious soa for pinged stimuli
              soa_list4[ind] = rd.uniform(t_binedges[i],t_binedges[i+1])
            else:
              soa_list4[ind] = 99 #no ping (well, 99 seconds into a trial)
            ind += 1

        # re-format this one too
        soa_list4 = np.reshape(soa_list4, (nblocks, npairs_block))

        # fix stim_path
        stim_path2 = [stim_path[i] for i in stim_list2]
        stim_path2 = np.array(stim_path2)
        stim_path3 = np.reshape(stim_path2, (nblocks, npairs_block))

        # print our baby
        print(stim_list3)
        print(soa_list3)

        # init
        enc_block = 0
        tr_enc = 0
        ret_block = 0
        tr_ret = 0
        set_len_enc = ntrials_enc/npairs_block
        set_len_ret = ntrials_ret/npairs_block
  Routine code_block
    CodeComponent code_block1
      Code Type = Py
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      Begin Routine:
        # begin routine
        # BUILD ENCODING LIST
        curr_set_enc = stim_list3[enc_block, :]  # extract current list
        # extend it to accomodate ntrials (INT rounds down!)
        curr_set_enc = np.tile(curr_set_enc,int(set_len_enc))
        # how many are left after that?
        how_many_left_enc = round((set_len_enc-int(set_len_enc))*npairs_block)
        curr_set_enc = np.append(curr_set_enc, rd.sample(
            list(stim_list3[enc_block, :]), how_many_left_enc))  # add those
        curr_set_enc = curr_set_enc.astype(int) # make sure it's integer
        rd.shuffle(curr_set_enc)  # shuffle set
        #avoid direct repetitions
        while 0 in curr_set_enc - np.roll(curr_set_enc,1):
          rd.shuffle(curr_set_enc)  # shuffle set

        # BUILD RETRIEVAL LIST
        curr_set_ret = stim_list3[ret_block, :]  # extract current list
        # extend it to accomodate ntrials (INT rounds down!)
        curr_set_ret = np.tile(curr_set_ret,int(set_len_ret))
        # how many are left after that?
        how_many_left_ret = round((set_len_ret-int(set_len_ret))*npairs_block)
        curr_set_ret = np.append(curr_set_ret, rd.sample(
            list(stim_list3[ret_block, :]), how_many_left_ret))  # add those
        curr_set_ret = curr_set_ret.astype(int) # make sure it's integer
        rd.shuffle(curr_set_ret)  # shuffle set
        #avoid direct repetitions
        while 0 in curr_set_ret - np.roll(curr_set_ret,1):
          rd.shuffle(curr_set_ret)  # shuffle set

        # make soa list by means of lookup table
        curr_soa = np.zeros(len(curr_set_ret))
        i = 0
        for s in curr_set_ret:
          ind = np.where(stim_list3 == s)
          curr_soa[i] = soa_list4[ind]
          i += 1

        # ENCODING stim set
        curr_stim_enc = np.array(stim_path)[curr_set_enc]
        curr_verb_enc = np.array(verb_list)[curr_set_enc]

        # RETRIEVAL stim set
        curr_stim_ret = np.array(stim_path)[curr_set_ret]
        curr_verb_ret = np.array(verb_list)[curr_set_ret]
        curr_soa_ret  = curr_soa

        # Generate WM set
        wm_vec = np.zeros(999)
        for ind in range(0,999):
          wm_vec[ind] = str(rd.randint(1, 99))
        wm_trl = 0 # trial index
        wm_perf = 0 #performance updater

        # Generate RETRIEVAL test set
        rettest_trls_temp = np.append(np.unique(curr_set_enc),np.unique(curr_set_enc)) #create a nice and long list
        rettest_trls = rettest_trls_temp[:nret_test] #filter out how many rettest trials there will be
        rd.shuffle(rettest_trls) #shuffle
        while np.count_nonzero((rettest_trls - np.roll(rettest_trls,-1)==0)): #avoid direct repetitions
            rd.shuffle(rettest_trls)
        tr_rettest = 0

        thisExp.addData('curr_soa_ret',curr_soa_ret)
        thisExp.addData('curr_set_ret',curr_set_ret)
        thisExp.addData('curr_verb_ret',curr_verb_ret)
        thisExp.addData('curr_stim_ret',curr_stim_ret)

        thisExp.addData('curr_set_enc',curr_set_enc)
        thisExp.addData('curr_stim_enc',curr_stim_enc)
      End Routine:
        #update relevant block variables
        enc_block += 1
        ret_block += 1
        tr_enc = 0
        tr_ret = 0
    ParallelOutComponent port_block
      address = 0x2010
      disabled = True
      register = EIO
      startData = 14
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine verb_ret
    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if t >= 5:
            continueRoutine = False
  Routine code_enc
    CodeComponent code_encoding
      Code Type = Py
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      Begin Routine:
        # ENCODING PHASE
        stim_enc = curr_stim_enc[tr_enc]
        verb_enc = curr_verb_enc[tr_enc]
        stimID_enc = curr_set_enc[tr_enc]
      End Routine:
        tr_enc += 1
  Routine code_ret
    CodeComponent code_retrieval
      Code Type = Py
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      Begin Routine:
        # RETRIEVAL PHASE
        stim_ret = curr_stim_ret[tr_ret]
        verb_ret = curr_verb_ret[tr_ret]
        soa_ret  = curr_soa_ret[tr_ret]
        stimID_ret = curr_set_ret[tr_ret]
      End Routine:
        tr_ret += 1
  Routine routine_23r23
  Routine wm_task
  Routine WM_task
    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        wm_text = int(wm_vec[wm_trl]) # current trial

        if trials.thisN == 0: # only on the first iteration,
          loop_timer = core.Clock() # start a new timer
      Each Frame:
        if loop_timer.getTime() >= wm_dur:
            continueRoutine = False
            trials.finished = True
      End Routine:
        wm_trl += 1

        wm_perf += 0
  Routine code_wm2
  Routine WM_results
    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        if wm_perf == 0 and wm_trl == 0:
            nCorr = 0
        else:
            nCorr = (wm_perf/(wm_trl-1))*100

        text_results = "You completed %i trials and got %i percent correct. Press spacebar to continue." %((wm_trl-1),nCorr)
  Routine instruc_enc
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        reminder_enc = path_instruc + 'reminder_enc.png'
  Routine instruc_wm
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        reminder_wm = path_instruc + 'reminder_wm.png'
  Routine instruc_ret
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        reminder_ret = path_instruc + 'reminder_ret.png'
  Routine instruc_end
  Routine block_ticker
    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        if int(pp_num) > 98:
            core.quit()

        block_update = "Block %i out of %i finished. Feel free to take a short break. To continue, press spacebar." %(enc_block,nblocks)
  Routine instruc_rettest
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        reminder_rettest = path_instruc + 'reminder_rettest.png'
  Routine code_rettest
    CodeComponent code_retrievaltest
      Code Type = Py
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      Begin Routine:
        # RETRIEVAL TEST PHASE
        rettest_ind = rettest_trls[tr_rettest] #first index of ret test list
        rettest_curr_verb = np.array(verb_list)[rettest_ind] #fetch that verb
        rettest_curr_corr_img = np.array(stim_path)[rettest_ind] #and fetch that image

        rettest_curr_incorr_img = rettest_curr_corr_img
        while rettest_curr_incorr_img == rettest_curr_corr_img: #keep going until incorrect image is different from correct
          rand_img = np.random.choice(rettest_trls)
          rettest_curr_incorr_img = np.array(stim_path)[rand_img]

        rng_rettest = rd.uniform(0,1) # randomly allocate correct and incorrect to either left or right side
        if rng_rettest > 0.5:
          left_rettest = rettest_curr_corr_img
          right_rettest = rettest_curr_incorr_img
        else:
          left_rettest = rettest_curr_incorr_img
          right_rettest = rettest_curr_corr_img

        if rng_rettest > 0.5:
          corr_ans = 'left'
        else:
          corr_ans = 'right'

        thisExp.addData('corr_ans',corr_ans)
        thisExp.addData('rettest_curr_corr_img',rettest_curr_corr_img)
        thisExp.addData('rettest_curr_incorr_img',rettest_curr_incorr_img)
        thisExp.addData('rettest_ind',rettest_ind)
        thisExp.addData('rettest_trls',rettest_trls)
      End Routine:
        tr_rettest += 1
  Routine ret_test
  Routine fixation3_2
  Routine fixation5
  Routine pport_wm
  Routine pport_enc
    ParallelOutComponent port_enc_start
      address = 0x0378
      register = EIO
      startData = 10
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine pport_ret
    ParallelOutComponent port_ret
      address = 0x0378
      disabled = True
      register = EIO
      startData = 12
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine pport_rettest
Flow
  Routine code_init
  Routine begin
  Routine instructions
  LoopInitiator blocks_total loopType="TrialHandler"
    loopType = sequential
    nReps = nblocks
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    Routine code_block
    Routine instruc_enc
    LoopInitiator trials_enc loopType="TrialHandler"
      loopType = sequential
      nReps = ntrials_enc
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      Routine code_enc
      Routine fixation
      Routine word
      Routine fixation2
      Routine img_enc
    LoopTerminator trials_enc
    Routine instruc_wm
    Routine pport_wm
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 999
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      Routine WM_task
    LoopTerminator trials
    Routine WM_results
    Routine instruc_ret
    LoopInitiator trials_ret loopType="TrialHandler"
      loopType = sequential
      nReps = ntrials_ret
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      Routine code_ret
      Routine fixation5
      Routine verb_ret
      Routine fixation4
    LoopTerminator trials_ret
    Routine instruc_rettest
    Routine pport_rettest
    LoopInitiator trials_rettest loopType="TrialHandler"
      loopType = sequential
      nReps = nret_test
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      Routine code_rettest
      Routine ret_test
      Routine fixation5
    LoopTerminator trials_rettest
    Routine block_ticker
  LoopTerminator blocks_total
  Routine end
